PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'gender': '', 'age': '', 'participant': '001', 'language': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = $[1.000,1.000,1.000]
  expName = experiment2_b
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Routines
  Routine Instruction_Intro
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent lub
      image [set every repeat] = $"Images/intro"+condition+".png"
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import random
        condition = random.choice(('A','B'))
      Begin JS Experiment:
        function random_character() {
            var chars = "AB";
            return chars.substr( Math.floor(Math.random() * 2), 1);
        }

        condition = random_character();
  Routine Exposure
    ImageComponent Sing_img
      image [set every repeat] = $trig_img
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
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    ImageComponent Pl_img
      image [set every repeat] = $targ_img
      pos = (0, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      units = norm
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    TextComponent Sing_txt
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $trig
      units = norm
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    TextComponent Pl_txt
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.6)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text [set every repeat] = $targ
      units = norm
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  Routine Instruction_Prod
    ImageComponent image_3
      image [set every repeat] = $"Images/instrProd"+condition+".png"
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_Prod
    TextComponent Target_ins1
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 5
      text [set every repeat] = $instr
      units = norm
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    ImageComponent Trigger_img1
      image [set every repeat] = $trig_img
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = norm
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    ImageComponent Target_img1
      image [set every repeat] = $targ_img
      pos = (0, 0.2)
      startVal [time (s)] = 5
      units = norm
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    TextComponent Trigger_txt1
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $trig
      units = norm
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    CodeComponent textinput
      Code Type = Py
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        txtinp.alignHoriz ='center'
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return' and len(inputText) >1:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
    TextComponent txtinp
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.6)
      startVal [time (s)] = 5
      text [set every frame] = $inputText
      units = norm
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    KeyboardComponent text_resp
      forceEndRoutine = False
      startVal [time (s)] = 5
      store = all keys
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  Routine ISI_1sec
    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
  Routine Instruction_FC
    ImageComponent image_6
      image [set every repeat] = $"Images/instrFC"+condition+".png"
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_FC
    TextComponent Target_ins2
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 4
      text [set every repeat] = $instr
      units = norm
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    ImageComponent Trigger_img2
      image [set every repeat] = $trig_img
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = norm
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    ImageComponent Target_img2
      image [set every repeat] = $targ_img
      pos = (0, 0.2)
      startVal [time (s)] = 4
      units = norm
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    TextComponent Trigger_txt2
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $trig
      units = norm
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    TextComponent Target_instr_l
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.08
      pos = (-0.5, -0.9)
      startVal [time (s)] = 4
      units = norm
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      text:
        Press a
    TextComponent Target_instr_r
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.08
      pos = (0.5, -0.8)
      startVal [time (s)] = 4
      text = Press k
      units = norm
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    KeyboardComponent FC_resp
      allowedKeys = 'a','k'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent Resp_a
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (-0.5, -0.6)
      startVal [time (s)] = 4
      text [set every repeat] = $a
      units = norm
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    TextComponent Resp_b
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0.5, -0.6)
      startVal [time (s)] = 4
      text [set every repeat] = $k
      units = norm
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  Routine Exposure_2
    ImageComponent image
      image [set every repeat] = $Picture
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Exposure_3
    ImageComponent image_2
      image [set every repeat] = $Picture_pl
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine ISI_Pre
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
    PolygonComponent fixation
      fillColor = $[-1.000,-1.000,-1.000]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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  Routine Thank_you
    TextComponent text
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Thank you very much for participating!

        Press q to quit.
    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instruction_Intro
  Routine ISI_Pre
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = np.random.choice(43, size = 20, replace = False)
    conditionsFile = $"Lists/Order"+condition+".xlsx"
    loopType = random
    nReps = 1
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    Routine Exposure
    Routine ISI_1sec
  LoopTerminator trials
  Routine Instruction_Prod
  Routine ISI_Pre
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = np.random.choice(30, size = 10, replace = False)
    conditionsFile = $"Lists/OrderProd"+condition+".xlsx"
    loopType = random
    nReps = 1
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    Routine Test_Prod
    Routine ISI_1sec
  LoopTerminator trials_2
  Routine Instruction_FC
  Routine ISI_Pre
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = np.random.choice(30, size = 10, replace = False)
    conditionsFile = $"Lists/OrderFC"+condition+".xlsx"
    loopType = random
    nReps = 1
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    Routine Test_FC
    Routine ISI_1sec
  LoopTerminator trials_3
  Routine Thank_you
